PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = flow
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Routines
  Routine trial
  Routine filter
  Routine fixation
    TextComponent fixationResp
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine flanker
    ImageComponent image1
      image = None
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image2
      image = None
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image3
      image = None
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image4
      image = None
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image5
      image = None
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image6
      image = None
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image7
      image = None
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image8
      image = None
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'f','k'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        anchor_dict = dict([(2,0),(5,0),(8,0)])

        popstars = [
            "pop_1.png",
            "pop_2.png",
            "pop_3.png",
            "pop_4.png",
            "pop_5.png",
            "pop_6.png",
        ]

        politicians = [
            "pol_1.png",
            "pol_2.png",
            "pol_3.png",
            "pol_4.png",
            "pol_5.png",
            "pol_6.png",

        ]

        stock = [
        "stock_1.png",
        "stock_2.png",
        "stock_3.png",
        "stock_4.png",
        "stock_5.png",
        "stock_6.png",
        "stock_7.png"
        ]
      Begin Routine:
        target = randint(low = 0, high = load)
        png = ""
        stockSet = set()
        images = [
        image1,
        image2,
        image3,
        image4,
        image5,
        image6,
        image7,
        image8
        ]

        if (identity == "pop"):
            index = randint(low = 0, high = len(popstars) )
            png = popstars[index]
        else:
            index = randint(low = 0, high = len(politicians) )
            png = politicians[index]

        def pos (index):
            return index * 0.1

        def setImage (file):
            return "images/" + file

        anchor = anchor_dict[load]



        for i in range(load):
            cImage = images[i]
            cImage.position = [0, anchor + pos(i)]

            if i == target:
                cImage.image = setImage(png)

            else:
                index = randint(low = 0, high = len(stock))
                while stock[index] in stockSet:
                    index = randint(low = 0, high = len(stock))

                stockSet.add(stock[index])
                cImage.image = setImage(stock[index])


        text.text = load
  Routine breakScr
    TextComponent breakText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press the SPACE key to continue.
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    KeyboardComponent breakResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine goodbye
    TextComponent byeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        The experiment is now complete.

        Thank you, and goodbye!
  Routine instructions
    KeyboardComponent instrResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        On each trial, you will see a set of faces in the middle of the screen.
        One (1) of these faces will either be a POLITICIAN or a POP STAR.

        If the face is a POLITICIAN, press the F key.
        If the face is a POP STAR, press the K key.

        You will also see a face o one side of the set.
        Please ignore this face as best as you can.

        At all times, please:
        - Keep your eyes fixed on the cross (+) at the center of the screen.
        - Respond as quickly and accurately as you can.

        Press the SPACE key to begin the experiment.
Flow
  Routine instructions
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = blocks.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('type', 'practice')]),
      OrderedDict([('type', 'real')]),
      OrderedDict([('type', 'real')]),
      OrderedDict([('type', 'real')]),
      OrderedDict([('type', 'real')])]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = trial.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('congruency', 'congruent'), ('distractor', 'face'), ('load', 2), ('identity', 'pop'), ('correct', 'k')]),
        OrderedDict([('congruency', 'incongruent'), ('distractor', 'face'), ('load', 2), ('identity', 'pop'), ('correct', 'k')]),
        OrderedDict([('congruency', 'congruent'), ('distractor', 'inv'), ('load', 2), ('identity', 'pop'), ('correct', 'k')]),
        OrderedDict([('congruency', 'incongruent'), ('distractor', 'inv'), ('load', 2), ('identity', 'pop'), ('correct', 'k')]),
        OrderedDict([('congruency', 'congruent'), ('distractor', 'face'), ('load', 2), ('identity', 'pol'), ('correct', 'f')]),
        OrderedDict([('congruency', 'incongruent'), ('distractor', 'face'), ('load', 2), ('identity', 'pol'), ('correct', 'f')]),
        OrderedDict([('congruency', 'congruent'), ('distractor', 'inv'), ('load', 2), ('identity', 'pol'), ('correct', 'f')]),
        OrderedDict([('congruency', 'incongruent'), ('distractor', 'inv'), ('load', 2), ('identity', 'pol'), ('correct', 'f')]),
        OrderedDict([('congruency', 'congruent'), ('distractor', 'face'), ('load', 5), ('identity', 'pop'), ('correct', 'k')]),
        OrderedDict([('congruency', 'incongruent'), ('distractor', 'face'), ('load', 5), ('identity', 'pop'), ('correct', 'k')]),
        OrderedDict([('congruency', 'congruent'), ('distractor', 'inv'), ('load', 5), ('identity', 'pop'), ('correct', 'k')]),
        OrderedDict([('congruency', 'incongruent'), ('distractor', 'inv'), ('load', 5), ('identity', 'pop'), ('correct', 'k')])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
      Routine fixation
      Routine flanker
    LoopTerminator trials
    Routine breakScr
  LoopTerminator blocks
  Routine goodbye
